PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = ATM_main_5-19-21_copy
  logging level = debug
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Routines
  Routine instr_othr_mw
    TextComponent hi
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = hi
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  Routine Other_vid1
    KeyboardComponent other_j_btn
      allowedKeys = 'space'
      durationEstim = 5
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    MovieComponent josh_mov
      backend = moviepy
      forceEndRoutine = False
      movie = /Users/isaacchristian/Desktop/Princeton/vids/josh_meditation.mp4
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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  Routine MC_other_instr
    TextComponent MC_other_title
      durationEstim = 20
      letterHeight = 0.07
      pos = (0, .35)
      startVal [time (s)] = 0.0
      text = Other Breath Counting
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    TextboxComponent MC_other_body
      bold = False
      durationEstim = 20
      editable = False
      letterHeight = 0.03
      padding = None
      startVal [time (s)] = 0.0
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      text:
        1. An actor will be presented onscreen for the next 5 minutes

        2. Count the actor’s breaths, increasing your count at the end of each breath cycle (breathe in, breathe out, +1)

        3. On the actors FIFTH breath, press button 1

        4. RESET your count, and begin counting from 1-5 again
    TextComponent MC_other_nxt
      durationEstim = 20
      letterHeight = 0.03
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      text = Press button 1 when you are ready to begin
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    KeyboardComponent advance4
      allowedKeys = 'space','1'
      durationEstim = 20
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine MC_self_instr
    TextComponent MC_self_title
      durationEstim = 20
      letterHeight = 0.07
      pos = (0, .35)
      startVal [time (s)] = 0.0
      text = Self Breath Counting 
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    TextboxComponent MC_self_body
      bold = False
      durationEstim = 20
      editable = False
      letterHeight = 0.03
      padding = None
      startVal [time (s)] = 0.0
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      text:
        1. Count your breaths, increasing your count at the end of each breath cycle (breathe in, breathe out, +1)

        2. On every FIFTH breath cycle, press button 1

        3. Then, RESET your count, and begin counting from 1-5 again

        4. Keep your eyes open and centered on the crosshair for the duration of the task
    TextComponent MC_self_nxt
      durationEstim = 20
      letterHeight = 0.03
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      text = Press button 1 when you are ready to begin
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    KeyboardComponent advance_1
      allowedKeys = 'space','1'
      durationEstim = 20
      forceEndRoutine = True
      startEstim = 0
      startVal [time (s)] = 0.0
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  Routine MM_self_instr
    TextComponent MM_self_title
      durationEstim = 20
      letterHeight = 0.07
      pos = (0, .35)
      startVal [time (s)] = 0.0
      text = Self Mind Monitor
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    TextboxComponent MM_self_body
      bold = False
      durationEstim = 20
      editable = False
      letterHeight = 0.03
      padding = None
      startVal [time (s)] = 0.0
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      text:
        1. Maintain focus on your breath for the entire 5 minutes of the task

        2. When you notice that your attention is no longer on the breath, press button 1

        3. Once noted, guide your attention back to your breath, and resume focus on breathing in and breathing out

        4. Keep your eyes open and centered on the crosshair for the duration of the task
    TextComponent MM_self_nxt
      durationEstim = 20
      letterHeight = 0.03
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      text = Press button 1 when you are ready to begin
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    KeyboardComponent advance_2
      allowedKeys = 'space','1'
      durationEstim = 20
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine MM_other_instr
    TextComponent MM_other_title
      durationEstim = 20
      letterHeight = 0.07
      pos = (0, .35)
      startVal [time (s)] = 0.0
      text = Other Mind Monitoring
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    TextboxComponent MM_other_body
      bold = False
      durationEstim = 20
      editable = False
      letterHeight = 0.03
      padding = None
      startVal [time (s)] = 0.0
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      text:
        1. An actor will be presented onscreen for the next 5 minutes

        2. Press button 1 when you believe the actor’s mind wandered from the task (their attention is no longer on breath)
    TextComponent MM_other_nxt
      durationEstim = 20
      letterHeight = 0.03
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      text = Press button 1 when you are ready to begin
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    KeyboardComponent advance3
      allowedKeys = 'space'
      durationEstim = 20
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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  Routine End_txt
    TextboxComponent end
      bold = False
      durationEstim = 10
      editable = False
      letterHeight = 0.05
      padding = None
      startVal [time (s)] = 0.0
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      text:
        Congratulations!

        You completed the task. Wait for instructions from the task operator.

        Thanks for your participation :)
    KeyboardComponent end_press
      allowedKeys = 'space','1'
      durationEstim = 10
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine self
    KeyboardComponent self_btn
      allowedKeys = 'space','1'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 307.5
      store = all keys
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    PolygonComponent trial_crosshair
      fillColor = $[1,1,1]
      lineWidth = .1
      opacity = .5
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 307.5
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    KeyboardComponent skip2
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 307.5
      store = nothing
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  Routine movie_nick
    KeyboardComponent other_n_btn
      allowedKeys = 'space','1'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 307.5
      store = all keys
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    MovieComponent nick_mov2
      No audio = True
      backend = moviepy
      forceEndRoutine = False
      movie [set every repeat] = nick_meditation.mp4
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 307.5
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    KeyboardComponent skip4
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 307.5
      store = nothing
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  Routine scan_wait
    TextComponent begin_scan_txt
      durationEstim = 10
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Waiting for scanner …
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    TextComponent still_txt
      durationEstim = 10
      letterHeight = 0.03
      pos = (-.075, -.15)
      startVal [time (s)] = 0.0
      text = ** Try to remain as still as possible for the entire scan! Thank u :)
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    KeyboardComponent begin_scan_btn
      allowedKeys = 'equal'
      discard previous = False
      durationEstim = 10
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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  Routine finish_trial
    TextboxComponent break_txt
      bold = False
      editable = False
      letterHeight = 0.05
      padding = None
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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      text:
        Task Complete! Yay! :)

        You may now take a break for 30 seconds.

        Press button 1 if you’d like to move on
    KeyboardComponent break_btn
      allowedKeys = 'space','1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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  Routine Begin
    TextboxComponent begin_text
      bold = False
      durationEstim = 10
      editable = False
      letterHeight = 0.05
      padding = None
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Attention Monitoring Task!

        Press Button 1 to begin
    KeyboardComponent begin_exp
      allowedKeys = 'space','1'
      durationEstim = 10
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        #  WHATTUP BOI ##
        # specify which of the three inner loops will run on each of
        # the Two iterations of the outer loop:

        ### BEGING EXP ###
        ## LAYER 1 ##
        # Randomize MS-1
        orders = [[1, 0, 0, 0], [0, 1, 0, 0 ], [0, 0, 1, 0 ], [0, 0, 0, 1]]
        orders1 = [[1, 0, 0, 0], [0, 1, 0, 0 ], [0, 0, 1, 0 ], [0, 0, 0, 1]]
        orders2 = [[0,4],[4,0]]

        shuffle(orders)
        shuffle(orders1)
        shuffle(orders2)
        print(orders)
        print(orders1)
        print(orders2)
  Routine stop
    TextComponent stopeh
      durationEstim = 20
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Stop
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    KeyboardComponent key_resp
      allowedKeys = 'right'
      discard previous = False
      durationEstim = 10
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine break_2
    TextComponent text
      durationEstim = 20
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        between two
    KeyboardComponent key_resp_2
      allowedKeys = 'right'
      durationEstim = 20
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TR
    TextComponent wait_scan_txt
      durationEstim = 2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Waiting for scanner …
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    TextComponent still_txt2
      durationEstim = 2
      letterHeight = .03
      pos = (-.075, -.15)
      startVal [time (s)] = 0.0
      text = ** Try to remain as still as possible for the entire scan! Thank u :)
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    KeyboardComponent scan_inter
      allowedKeys = 'equal'
      durationEstim = 2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine MW_self_instr
  Routine test
    TextComponent yo
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Any text

        including line breaks
    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      durationEstim = 5
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine movie_josh
    KeyboardComponent other_j_btn1
      allowedKeys = 'space','1'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 307.5
      store = all keys
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    MovieComponent josh_mov1
      No audio = True
      backend = moviepy
      forceEndRoutine = False
      movie [set every repeat] = josh_meditation.mp4
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 307.5
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    KeyboardComponent skip3
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 307.5
      store = nothing
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  Routine Rest_instr
    TextComponent Rest_title
      durationEstim = 20
      letterHeight = 0.07
      pos = (0, .35)
      startVal [time (s)] = 0.0
      text = Resting State Scan
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    TextboxComponent rest_body
      bold = False
      durationEstim = 20
      editable = False
      letterHeight = 0.03
      padding = None
      startVal [time (s)] = 0.0
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      text:
        1. In this block we will collect 5 minutes of your brain at rest

        2. Keep your eyes open and centered on the crosshair for the duration of the scan
    TextComponent rest_nxt
      durationEstim = 20
      letterHeight = 0.03
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      text = Press button 1 when you are ready to begin
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    KeyboardComponent advance_0
      allowedKeys = 'space','1'
      durationEstim = 20
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Rest_scan
    PolygonComponent trial_crosshair_rest
      fillColor = $[1,1,1]
      lineWidth = .1
      opacity = .5
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 307.5
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    KeyboardComponent skip1
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 307.5
      store = nothing
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Flow
  Routine Begin
  Routine Rest_instr
  Routine scan_wait
  Routine TR
  Routine TR
  Routine TR
  Routine scan_wait
  Routine Rest_scan
  Routine finish_trial
  LoopInitiator big_guy loopType="TrialHandler"
    loopType = sequential
    nReps = 2
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    LoopInitiator outer_loop1 loopType="TrialHandler"
      loopType = sequential
      nReps = orders2[0][big_guy.thisN]
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      LoopInitiator MC_self_loop1 loopType="TrialHandler"
        loopType = sequential
        nReps = orders[0][outer_loop1.thisN]
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        Routine MC_self_instr
        Routine TR
        Routine TR
        Routine TR
        Routine TR
        Routine scan_wait
        Routine self
        Routine finish_trial
      LoopTerminator MC_self_loop1
      LoopInitiator MM_self_loop1 loopType="TrialHandler"
        loopType = sequential
        nReps = orders[1][outer_loop1.thisN]
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        Routine MM_self_instr
        Routine TR
        Routine TR
        Routine TR
        Routine TR
        Routine scan_wait
        Routine self
        Routine finish_trial
      LoopTerminator MM_self_loop1
      LoopInitiator MM_other_loop1 loopType="TrialHandler"
        loopType = sequential
        nReps = orders[2][outer_loop1.thisN]
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        Routine MM_other_instr
        Routine TR
        Routine TR
        Routine TR
        Routine TR
        Routine scan_wait
        Routine movie_josh
        Routine finish_trial
      LoopTerminator MM_other_loop1
      LoopInitiator MC_other_loop1 loopType="TrialHandler"
        loopType = sequential
        nReps = orders[3][outer_loop1.thisN]
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        Routine MC_other_instr
        Routine TR
        Routine TR
        Routine TR
        Routine TR
        Routine scan_wait
        Routine movie_josh
        Routine finish_trial
      LoopTerminator MC_other_loop1
    LoopTerminator outer_loop1
    LoopInitiator outer_loop2 loopType="TrialHandler"
      loopType = sequential
      nReps = orders2[1][big_guy.thisN]
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      LoopInitiator MM_self_loop2 loopType="TrialHandler"
        loopType = sequential
        nReps = orders1[0][outer_loop2.thisN]
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        Routine MM_self_instr
        Routine TR
        Routine TR
        Routine TR
        Routine TR
        Routine scan_wait
        Routine self
        Routine finish_trial
      LoopTerminator MM_self_loop2
      LoopInitiator MC_self_loop2 loopType="TrialHandler"
        loopType = sequential
        nReps = orders1[1][outer_loop2.thisN]
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        Routine MC_self_instr
        Routine TR
        Routine TR
        Routine TR
        Routine TR
        Routine scan_wait
        Routine self
        Routine finish_trial
      LoopTerminator MC_self_loop2
      LoopInitiator MC_other_loop2 loopType="TrialHandler"
        loopType = sequential
        nReps = orders1[2][outer_loop2.thisN]
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        Routine MC_other_instr
        Routine TR
        Routine TR
        Routine TR
        Routine TR
        Routine scan_wait
        Routine movie_nick
        Routine finish_trial
      LoopTerminator MC_other_loop2
      LoopInitiator MM_other_loop2 loopType="TrialHandler"
        loopType = sequential
        nReps = orders1[3][outer_loop2.thisN]
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        Routine MM_other_instr
        Routine TR
        Routine TR
        Routine TR
        Routine TR
        Routine scan_wait
        Routine movie_nick
        Routine finish_trial
      LoopTerminator MM_other_loop2
    LoopTerminator outer_loop2
  LoopTerminator big_guy
  Routine Rest_instr
  Routine TR
  Routine TR
  Routine TR
  Routine TR
  Routine scan_wait
  Routine Rest_scan
  Routine End_txt
